PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'n_rep': '2', 'session': '001', 'Gender': '', 'ENG level': 'B1', 'ITA level': 'B1', 'lingua': 'ITA', 'rep': '3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = stroopeng
  keyboardBackend = ioHub
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Routines
  Routine ISTR
    TextComponent istr_txt
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press “space” to continue
    KeyboardComponent istr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine BLOCCO_ENG
    TextComponent eng_txt
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent eng_kb
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine BlOCCO_ITA
    TextComponent ita_txt
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $parola
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    KeyboardComponent ita_kb
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine GRAZIE
    TextComponent grazie_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thanks!
    KeyboardComponent grazie_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FLAG
    CodeComponent flag_code
      Code Type = Auto->JS
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      Begin Experiment:
        loop_ita = 0
        loop_eng = 0
      End Routine:
        if mouse.clicked_name[0] == 'ita_img':
          loop_ita = expInfo['n_rep']
          loop_eng = 0
        else:
           loop_ita = 0
           loop_eng = expInfo['n_rep']
    PolygonComponent ita_img
      fillColor = green
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent eng_img
      fillColor = blue
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = ita_img, eng_img
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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Flow
  Routine FLAG
  Routine ISTR
  LoopInitiator Loop_eng loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = loop_eng
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine BLOCCO_ENG
  LoopTerminator Loop_eng
  LoopInitiator Loop_ita loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = loop_ita
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    conditions:
      [{'word': 'red', 'parola': 'rosso', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'parola': 'rosso', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'parola': 'verde', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'parola': 'verde', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'parola': 'blu', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'parola': 'blu', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine BlOCCO_ITA
  LoopTerminator Loop_ita
  Routine GRAZIE
