PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'gender (m/f)': 'f', 'age': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  expName = stroop
  logging level = debug
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Routines
  Routine trial
    TextComponent stim
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      "[{u'congruent': 1L, u'word': u'red', u'corrAns': u'left', u'letterColor': u'red'},
      {u'congruent': 0L, u'word': u'red', u'corrAns': u'down', u'letterColor': u'green'},
      {u'congruent': 1L, u'word': u'green', u'corrAns': u'down', u'letterColor': u'green'},
      {u'congruent': 0L, u'word': u'green', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'congruent': 1L, u'word': u'blue', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'congruent': 0L, u'word': u'blue', u'corrAns': u'left', u'letterColor': u'red'}]"
    Routine trial
  LoopTerminator trials
  Routine thanks
