PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = u'data/PT_%s' % (expInfo['participant'])
  Experiment info = {'participant': '', 'session': '001', 'gender (m/f)': '', 'rep': '8', 'practice': '3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = stroop
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine CONTROBILANCIAMENTO
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        nreppractice = int(expInfo["practice"])

        nrepBreak = 1

        num = int(expInfo["participant"])

        if (num % 2) == 0:
            nrepENG = 0
            nrepITA = expInfo['rep']
        else:
             nrepENG = expInfo['rep']
             nrepITA = 0
      End Experiment:
        voglio_un_errore
  Routine ISTR_PRACTICE
    TextComponent istr_practice_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please press;
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Let's start with a few practice trials

        Press any key to continue
    KeyboardComponent istr_practice_kb
      allowedKeys = "space"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PRACTICE_TRIAL
    TextComponent practice_trial_txt
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $parola
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    KeyboardComponent practice_trial_kb
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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  Routine FEEDBACK
    CodeComponent feedback_code
      Code Type = Py
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      Begin Routine:
        if practice_trial_kb.corr:
            msg = "Correct! RT={:.3f}".format(practice_trial_kb.rt)
        else:
            msg = "Oops! That was wrong"
    TextComponent feedback_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine ISTR_EXP
    TextComponent istr_exp_txt
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS


        Press “space” to continue
    KeyboardComponent istr_exp_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ENG_TRIAL
    CodeComponent eng_trial_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("blocco", "ENG")


        num = int(expInfo["participant"])

        if (num % 2) == 0:
             thisExp.addData("order", "ITA_ENG")
        else:
             thisExp.addData("order", "ENG_ITA")
    TextComponent eng_trial_txt
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent eng_trial_kb
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine ITI
    TextComponent iti_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ITA_TRIAL
    CodeComponent ita_trial_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("blocco", "ITA")

        num = int(expInfo["participant"])

        if (num % 2) == 0:
             thisExp.addData("order", "ITA_ENG")
        else:
             thisExp.addData("order", "ENG_ITA")
    TextComponent ita_trial_txt
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $parola
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    KeyboardComponent ita_trial_kb
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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  Routine BREAK
    TextComponent break_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Pausa

        Premi “space” per continuare
    KeyboardComponent break_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SWITCH
    CodeComponent switch_code
      Code Type = Auto->JS
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      Begin Routine:
        nrepBreak = 0
        temp = nrepENG
        nrepENG = nrepITA
        nrepITA = temp
  Routine THANKS
    TextComponent thanks_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thanks!
    KeyboardComponent thanks_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine CONTROBILANCIAMENTO
  Routine ISTR_PRACTICE
  LoopInitiator Loop_practice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = nreppractice
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    conditions:
      [{'word': 'red', 'parola': 'rosso', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'parola': 'rosso', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'parola': 'verde', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'parola': 'verde', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'parola': 'blu', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'parola': 'blu', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine PRACTICE_TRIAL
    Routine FEEDBACK
  LoopTerminator Loop_practice
  Routine ISTR_EXP
  LoopInitiator Loop_controbilanciamento loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    LoopInitiator Loop_Eng loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = nrepENG
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      conditions:
        [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
        {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
        {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
        {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
        {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
        {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
      Routine ENG_TRIAL
      Routine ITI
    LoopTerminator Loop_Eng
    LoopInitiator Loop_Ita loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = nrepITA
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      conditions:
        [{'word': 'red', 'parola': 'rosso', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
        {'word': 'red', 'parola': 'rosso', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
        {'word': 'green', 'parola': 'verde', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
        {'word': 'green', 'parola': 'verde', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
        {'word': 'blue', 'parola': 'blu', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
        {'word': 'blue', 'parola': 'blu', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
      Routine ITA_TRIAL
      Routine ITI
    LoopTerminator Loop_Ita
    LoopInitiator Loop_break loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nrepBreak
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      Routine BREAK
    LoopTerminator Loop_break
    Routine SWITCH
  LoopTerminator Loop_controbilanciamento
  Routine THANKS
