PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'gender (m/f)': 'f', 'age': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  expName = stroop
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine ISTR
    TextComponent istr_txt
      color = $[1, 1, 1]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent istr_kb
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine TRIAL
    TextComponent trial_txt
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent trial_kb
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine THANKS
    TextComponent thanks_txt
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine ISTR
  LoopInitiator Trials_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine TRIAL
  LoopTerminator Trials_loop
  Routine THANKS
