PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '01', 'practice': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  color = black
  expName = stroop
  keyboardBackend = ioHub
  logging level = warning
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Routines
  Routine ISTR_PRACTICE
    TextComponent istr_practice_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Per favore, premi la freccia;
        SINISTRA se il colore è ROSSO
        BASSA se il colore è VERDE
        DESTRA se il colore è BLU

        Initiamo con un po' di pratica

        Premi qualsiasi tasto per iniziare
    KeyboardComponent istr_practice_kb
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine ISTR_ESPERIMENTO
    TextComponent istr_esperimento_txt
      color = $[1, 1, 1]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Ottimo, hai finito la prova,

        Adesso iniziamo l'esperimento, ricordati di premere:
        SINISTRA se il colore è ROSSO
        BASSO se il colore è VERDE
        DESTRA se il colore è BLU


        Premi qualsiasi tasto per iniziare
    KeyboardComponent istr_esperimento_kb
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
      syncScreenRefresh = False
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  Routine TRIAL
    TextComponent word_txt
      color [set every repeat] = $colore
      letterHeight = 0.2
      startVal [time (s)] = 0
      text [set every repeat] = $parola
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    KeyboardComponent resp_kb
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine FEEDBACK
    CodeComponent msg_code
      Code Type = Auto->JS
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      Begin Routine:
        # "resp_kb.corr" è ottenuto se trial
        # routine  "resp_kb" registra la risposta correta

        if resp_kb.corr:
          msg="Bravo! RT=%.3f" %(resp_kb.rt)
          #msg = "Correct! RT={:.3f}".format(resp_kb.rt)

        else:
          msg="Oops! non è coretto"
    TextComponent feedback_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine GRAZIE
    TextComponent grazie_txt
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        L'esperimento è finito.

        Grazie!
    KeyboardComponent grazie_kb
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine SETTING
    CodeComponent setting_code
      Code Type = Auto->JS
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      Begin Experiment:
        # initialisation di variabili

        msg = '' # per FEEDBACK

        practice = expInfo['practice'] # per nb rep PracticeLoop
  Routine FIXATION
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine SETTING
  Routine ISTR_PRACTICE
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = condizione.xlsx
    loopType = random
    nReps = practice
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    conditions:
      [{'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
      {'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
      {'parola': 'rosso', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
      {'parola': 'rosso', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
      {'parola': 'verde', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
      {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
      {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
      {'parola': 'verde', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
      {'parola': 'blu', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
      {'parola': 'blu', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
      {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'},
      {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'}]
    Routine FIXATION
    Routine TRIAL
    Routine FEEDBACK
  LoopTerminator PracticeLoop
  Routine ISTR_ESPERIMENTO
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condizione.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [{'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
      {'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
      {'parola': 'rosso', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
      {'parola': 'rosso', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
      {'parola': 'verde', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
      {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
      {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
      {'parola': 'verde', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
      {'parola': 'blu', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
      {'parola': 'blu', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
      {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'},
      {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'}]
    Routine FIXATION
    Routine TRIAL
  LoopTerminator trials
  Routine GRAZIE
