PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'gender (m/f)': 'f', 'participant': '0', 'ita': '1', 'eng': '1', 'pratica': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = stroop
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine ISI
    TextComponent txt_isi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine STIMOLI_ENG
    TextComponent txt_eng
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0
      text [set every repeat] = $word
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    KeyboardComponent kb_eng
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine STIMOLI_ITA
    TextComponent txt_ita
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0
      text [set every repeat] = $parola
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    KeyboardComponent kb_ita
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine SETTING
    CodeComponent code_setting
      Code Type = Auto->JS
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      Begin Routine:
        nb_loop_pratica =  int(expInfo["pratica"])
        nb_loop_ita =  int(expInfo["ita"])
        nb_loop_eng = int(expInfo["eng"])
  Routine PAUSA
    TextComponent txt_pausa
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Pausa...

        Premi 'Spazio' per proseguire
    KeyboardComponent kb_pausa
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine ISTRUZIONI
    TextComponent txt_istruzioni
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Ricordati, ignora la parola stessa e premi;
        Sinistra se vedi lettere ROSSE
        Basso se vedi lettere VERDE
        Destra se vedi lettere BLU


        Premi qualsiasi tasto per prosseguire
    KeyboardComponent kb_istruzioni
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine INSTRUCTION
    TextComponent txt_instruction
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent kb_instruction
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine GRAZIE
    TextComponent txt_end
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Abbiamo finito.

        Grazie!
  Routine FEEDBACK
    CodeComponent code_feedback
      Code Type = Py
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      Begin Experiment:
        count = 0
      Begin Routine:
        if kb_eng.corr:
            count = count+1
            msg = "Correct! RT={:.3f}".format(kb_eng.rt)
        else:
            msg = "Oops! That was wrong"
            count = 0
      End Routine:
        if count == 5:
                Loop_pratica.finished=True
                continueRoutine = False
    TextComponent txt_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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Flow
  Routine SETTING
  LoopInitiator Loop_pratica loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = nb_loop_pratica
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1, 'parola': 'rosso'},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0, 'parola': 'rosso'},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1, 'parola': 'verde'},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0, 'parola': 'verde'},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1, 'parola': 'blu'},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0, 'parola': 'blu'}]
    Routine STIMOLI_ENG
    Routine FEEDBACK
  LoopTerminator Loop_pratica
  Routine INSTRUCTION
  LoopInitiator Loop_eng loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = nb_loop_eng
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    conditions:
      [{u'congruent': 1L, u'word': u'red', u'corrAns': u'left', u'letterColor': u'red'},
      {u'congruent': 0L, u'word': u'red', u'corrAns': u'down', u'letterColor': u'green'},
      {u'congruent': 1L, u'word': u'green', u'corrAns': u'down', u'letterColor': u'green'},
      {u'congruent': 0L, u'word': u'green', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'congruent': 1L, u'word': u'blue', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'congruent': 0L, u'word': u'blue', u'corrAns': u'left', u'letterColor': u'red'}]
    Routine STIMOLI_ENG
    Routine ISI
  LoopTerminator Loop_eng
  Routine PAUSA
  Routine ISTRUZIONI
  LoopInitiator Loop_ita loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = nb_loop_ita
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1, 'parola': 'rosso'},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0, 'parola': 'rosso'},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1, 'parola': 'verde'},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0, 'parola': 'verde'},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1, 'parola': 'blu'},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0, 'parola': 'blu'}]
    Routine STIMOLI_ITA
    Routine ISI
  LoopTerminator Loop_ita
  Routine GRAZIE
