PsychoPy2experiment version="2022.1.4"
Settings
  Data file delimiter = semicolon
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  color = black
  expName = stroop
  keyboardBackend = ioHub
  logging level = warning
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Routines
  Routine ISTR_PRACTICE
    TextComponent istr_practice_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Per favore, premi la freccia;
        SINISTRA se il colore è ROSSO
        BASSA se il colore è VERDE
        DESTRA se il colore è BLU

        Initiamo con un po' di pratica

        Premi qualsiasi tasto per iniziare
    KeyboardComponent istr_practice_kb
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine ISTR_ESPERIMENTO
    TextComponent istr_esperimento_txt
      color = $[1, 1, 1]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Ottimo,

        Adesso iniziamo l'esperimento, ricordati di premere:
        SINISTRA se il colore è ROSSO
        BASSO se il colore è VERDE
        DESTRA se il colore è BLU


        Premi qualsiasi tasto per iniziare
    KeyboardComponent istr_esperimento_kb
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
      syncScreenRefresh = False
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  Routine FEEDBACK
    CodeComponent msg_code
      Code Type = Auto->JS
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      Begin Experiment:
        # initialisation di variabili
        msg = '' # per FEEDBACK
        endpractice = [] # per uscire di practice loop
      Begin Routine:
        # "resp_kb.corr" è ottenuto se trial
        # routine  "resp_kb" registra la risposta correta

        if practice_kb.corr:
          msg="Bravo! RT=%.3f" %(practice_kb.rt)
          #msg = "Correct! RT={:.3f}".format(resp_kb.rt)

        else:
          msg="Oops! non è coretto"
      End Routine:
        # track (up to) the last 5 trials
        endpractice.append(practice_kb.corr)

        # en practice loop se 4 risposte corr nelle ultime 6
        if sum(endpractice[-6:] ) == 4:
            PracticeLoop.finished = True
    TextComponent feedback_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine GRAZIE
    ImageComponent logo_img
      image = images/logo.jpeg
      pos = (0, 150)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent grazie_txt
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      pos = [0, -0.4]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        L'esperimento è finito.

        Grazie!
    KeyboardComponent grazie_kb
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine SETTING
    CodeComponent setting_code
      Code Type = Auto->JS
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      Begin Experiment:
        # parametters

        fixation_duration = 0.5

        rep_condition = 1 # nb rep per blocchi sperimentali



        # nb rep blocchi sperimentali
        num = (int(expInfo['participant']) % 2)

        if  num == 0:
            nb_rep_ita = 1*rep_condition
            nb_rep_eng = 0
            blocco_order = "ITA_ENG"
        else:
            nb_rep_eng = 1*rep_condition
            nb_rep_ita = 0
            blocco_order = "ENG_ITA"
  Routine FIXATION
    TextComponent fixation_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixation_duration
      text = +
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  Routine MATRIX
    CodeComponent matrix_code
      Code Type = Auto->JS
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      End Routine:
        # decisione se fare il blocco pratica o meno:
        if practice_ms.clicked_name[0] == "blue_img":
            practice = 1 #blue pill = fare pratica
        else:
            practice = 0 #red pill = no pratica
    ImageComponent blue_img
      image = images/blue_pill.jpg
      pos = (-250, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent red_img
      image = images/red_pill.jpg
      pos = (250, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent practice_ms
      clickable = blue_img, red_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine CLICKED
    CodeComponent clicked_code
      Code Type = Auto->JS
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      Begin Routine:
        clicked = practice_ms.clicked_name[0]
    TextComponent clicked_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $clicked
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  Routine TRIAL_ENG
    CodeComponent eng_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("blocco", "ENG")
        thisExp.addData("order", blocco_order)
    TextComponent eng_txt
      color [set every repeat] = $colore
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent eng_kb
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine TRIAL_ITA
    CodeComponent ita_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("blocco", "ITA")
        thisExp.addData("order", blocco_order)
    TextComponent ita_txt
      color [set every repeat] = $colore
      letterHeight = 0.2
      startVal [time (s)] = 0
      text [set every repeat] = $parola
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    KeyboardComponent ita_kb
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine BREAK
    TextComponent pausa_txt
      color = $[1, 1, 1]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text = pausa...
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    KeyboardComponent pausa_kb
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
      syncScreenRefresh = False
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  Routine SWITCH
    CodeComponent switch_code
      Code Type = Auto->JS
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      Begin Routine:
        temp = nb_rep_ita
        nb_rep_ita = nb_rep_eng
        nb_rep_eng = temp
  Routine TRIAL_PRACTICE
    CodeComponent practice_code_2
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("blocco", "PRACTICE")
        thisExp.addData("order", blocco_order)
    TextComponent practice_txt
      color [set every repeat] = $colore
      letterHeight = 0.2
      startVal [time (s)] = 0
      text [set every repeat] = $parola
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    KeyboardComponent practice_kb
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine LIKERT
    TextComponent likert_txt
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = Da 1 a 10, quanto pensi di essere stato accurato nelle tue risposte ?
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    SliderComponent likert_sld
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      labels = "per niente accurato","molto accurato"
      letterHeight = 0.05
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9,10)
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    ButtonComponent likert_bt
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      size = (0.3,0.15)
      startVal [time (s)] = 0
      text = premi per prosseguire
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  Routine HUMAN
    CodeComponent human_code
      Code Type = Auto->JS
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      Begin Routine:
        x = int(random()*10)    # numpy random number tra 1 e 100.
        y = int(random()*10)

        correctsum = x+y

        math = str(x) + " + " + str(y) + " ="
      End Routine:
        if str(correctsum) == textbox.text:
                HumanLoop.finished = True
    TextComponent human_txt
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Scrivi il risultato:
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    TextComponent math_txt
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $math
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.7)
      size = (0.2,0.1)
      startVal [time (s)] = 0
      text = validare
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Flow
  Routine SETTING
  LoopInitiator HumanLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 100
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    Routine HUMAN
  LoopTerminator HumanLoop
  Routine MATRIX
  LoopInitiator FullPracticeLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = practice
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    Routine ISTR_PRACTICE
    LoopInitiator PracticeLoop loopType="TrialHandler"
      conditionsFile = condizione.xlsx
      loopType = random
      nReps = 10
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      conditions:
        [{'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
        {'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
        {'parola': 'rosso', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
        {'parola': 'rosso', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
        {'parola': 'verde', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
        {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
        {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
        {'parola': 'verde', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
        {'parola': 'blu', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
        {'parola': 'blu', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
        {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'},
        {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'}]
      Routine FIXATION
      Routine TRIAL_PRACTICE
      Routine FEEDBACK
    LoopTerminator PracticeLoop
  LoopTerminator FullPracticeLoop
  LoopInitiator ControbilanciamewntoLoop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine ISTR_ESPERIMENTO
    LoopInitiator ItaLoop loopType="TrialHandler"
      conditionsFile = condizione.xlsx
      endPoints = [1, 2]
      loopType = random
      nReps = nb_rep_ita
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      conditions:
        [{'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
        {'parola': 'rosso', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
        {'parola': 'rosso', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
        {'parola': 'rosso', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
        {'parola': 'verde', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
        {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
        {'parola': 'verde', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
        {'parola': 'verde', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
        {'parola': 'blu', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
        {'parola': 'blu', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
        {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'},
        {'parola': 'blu', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'}]
      Routine FIXATION
      Routine TRIAL_ITA
    LoopTerminator ItaLoop
    LoopInitiator EngLoop loopType="TrialHandler"
      conditionsFile = condizione.xlsx
      loopType = random
      nReps = nb_rep_eng
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      conditions:
        [{'parola': 'rosso', 'word': 'red', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
        {'parola': 'rosso', 'word': 'red', 'colore': 'red', 'corrAns': 'left', 'congruente': 'cong'},
        {'parola': 'rosso', 'word': 'red', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
        {'parola': 'rosso', 'word': 'red', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
        {'parola': 'verde', 'word': 'green', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
        {'parola': 'verde', 'word': 'green', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
        {'parola': 'verde', 'word': 'green', 'colore': 'green', 'corrAns': 'down', 'congruente': 'cong'},
        {'parola': 'verde', 'word': 'green', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'incong'},
        {'parola': 'blu', 'word': 'blue', 'colore': 'red', 'corrAns': 'left', 'congruente': 'incong'},
        {'parola': 'blu', 'word': 'blue', 'colore': 'green', 'corrAns': 'down', 'congruente': 'incong'},
        {'parola': 'blu', 'word': 'blue', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'},
        {'parola': 'blu', 'word': 'blue', 'colore': 'blue', 'corrAns': 'right', 'congruente': 'cong'}]
      Routine FIXATION
      Routine TRIAL_ENG
    LoopTerminator EngLoop
    Routine SWITCH
  LoopTerminator ControbilanciamewntoLoop
  Routine LIKERT
  Routine GRAZIE
